PsychoPy2experiment version="1.82.01"
Settings
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['Participant'], expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'Gender': u'', u'Age': u'', u'Participant': u''}
  expName = IRAP
  logging level = warning
  Units = norm
  Save log file = False
  Screen = 1
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Routines
  Routine block2Trials
    TextComponent labelStimulusBlock2
      text [set every repeat] = $label
      pos = [0, 0.5]
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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    TextComponent targetStimulus2
      text [set every repeat] = $target
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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    KeyboardComponent response2
      correctAns = $correctAns2
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = allowAns2
      startVal [time (s)] = 0.4
      store = first key
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    KeyboardComponent incorrectResponse2
      correctAns = $correctAns1
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys [set every repeat] = allowAns1
      startVal [time (s)] = 0.4
      store = first key
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    TextComponent responseOption1Incon
      text [set every repeat] = $responseOption1
      pos = [-0.5,-0.8]
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent responseOption2Incon
      text [set every repeat] = $responseOption2
      pos = [0.5,-0.8]
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent trialTypeIncon
      color = black
      text [set every repeat] = $trialType
      stopVal [duration (s)] = 1.0
      pos = [0, -0.4]
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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    CodeComponent inconAccuracyFeedbackCode
      Begin Experiment:
        #msg variable just needs some value at start
        msg2=""
      Each Frame:
        if len(incorrectResponse2.keys)<1:
            msg2=""
        else:
            msg2="X"
    TextComponent inconAccuracyFeedback
      color = red
      text [set every frame] = $msg2
      pos = [0, -0.5]
      startVal [time (s)] = 0.4
      letterHeight = 0.2
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  Routine block1Trials
    TextComponent labelStimulusBlock1
      text [set every repeat] = $label
      pos = [0, 0.5]
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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    TextComponent targetStimulus1
      text [set every repeat] = $target
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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    KeyboardComponent response1
      correctAns = $correctAns1
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = allowAns1
      startVal [time (s)] = 0.4
      store = first key
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    KeyboardComponent incorrectResponse1
      correctAns = $correctAns2
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys [set every repeat] = allowAns2
      startVal [time (s)] = 0.4
      store = first key
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    TextComponent responseOption1Con
      text [set every repeat] = $responseOption1
      pos = [-0.5,-0.8]
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent responseOption2Con
      text [set every repeat] = $responseOption2
      pos = [0.5,-0.8]
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent trialTypeCon
      color = black
      text [set every repeat] = $trialType
      stopVal [duration (s)] = 1.0
      pos = [0, -0.4]
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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    CodeComponent conAccuracyFeedbackCode
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Each Frame:
        if len(incorrectResponse1.keys)<1:
            msg=""
        else:
            msg="X"
    TextComponent conAccuracyFeedback
      color = red
      text [set every frame] = $msg
      pos = [0, -0.5]
      startVal [time (s)] = 0.4
      letterHeight = 0.2
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  Routine instructPrac
    TextComponent instrTextCon_3
      color = $[-1,1,-1]
      text [set every repeat] = $rule1
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    KeyboardComponent ready_3
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      allowedKeys = 'd', 'k'
      startVal [time (s)] = .4
      store = nothing
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    TextComponent text_28
      text [set every repeat] = $space
      pos = [0, -0.8]
      startVal [time (s)] = .4
      letterHeight = 0.05
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  Routine instructPrac2
    TextComponent instrTextIncon_2
      color = $[-1,1,-1]
      text [set every repeat] = $rule2
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'd', 'k'
      startVal [time (s)] = .4
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    TextComponent text_11
      text [set every repeat] = $space
      pos = [0, -0.8]
      startVal [time (s)] = .4
      letterHeight = 0.05
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  Routine feedbackBlock1Prac
    CodeComponent code_6
      Begin Experiment:
        msg1='doh!'#if this comes up we forgot to update the msg!
        endMsg='Finished Experiment'
      Begin Routine:
        nCorrLoop1Prac = (float(trialsLoop1.data['response1.corr'].count()) - float(trialsLoop1.data['incorrectResponse1.corr'].sum())) /  float(trialsLoop1.data['response1.corr'].count()) * 100 #count the number of 'correct' correctIncon trials (which actually equals the number of trials, as all must be correct to progress). Take away the number of 'correct' incorrectIncon trials to find real proportion of truly correct trials. Divide by total number of trials and multiply by 100.
        medianRtLoop1Prac = np.median(trialsLoop1.data['response1.rt'])
        msg1 = "%i %s" %(nCorrLoop1Prac, percentCorrect) #percentCorrect is a variable pulled from excel sheet 'blocks'
        msg1_2 = "%.2f %s" %(medianRtLoop1Prac, seconds) #same as above
    TextComponent text_30
      text [set every repeat] = $msg1
      pos = [0.2, 0]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    KeyboardComponent key_resp_10
      forceEndRoutine = True
      allowedKeys = 'd', 'k'
      startVal [time (s)] = .4
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    TextComponent text_31
      text [set every repeat] = $space
      pos = [0, -0.8]
      startVal [time (s)] = .4
      letterHeight = 0.05
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    TextComponent text_32
      text [set every repeat] = $msg1_2
      pos = [0.2, -0.1]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent accuracyMessage_3
      text [set every repeat] = $accuracy
      pos = [-0.2, 0]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent speedMessage_3
      text [set every repeat] = $speed
      pos = [-0.2, -0.1]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent aimAccuracyAndLatency_3
      text [set every repeat] = $aim
      pos = [0, 0.3]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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  Routine instructTest
    TextComponent instrTextCon_2
      color = $[-1,1,-1]
      text [set every repeat] = $rule1
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    KeyboardComponent ready_2
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      allowedKeys = 'd', 'k'
      startVal [time (s)] = .4
      store = nothing
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    TextComponent text_18
      text [set every repeat] = $space
      pos = [0, -0.8]
      startVal [time (s)] = .4
      letterHeight = 0.05
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  Routine feedbackBlock2Test
    CodeComponent code_4
      Begin Routine:
        nCorrLoop2Test = (float(trialsTestLoop2.data['response2.corr'].count()) - float(trialsTestLoop2.data['incorrectResponse2.corr'].sum())) /  float(trialsTestLoop2.data['response2.corr'].count()) * 100 #count the number of 'correct' correctIncon trials (which actually equals the number of trials, as all must be correct to progress). Take away the number of 'correct' incorrectIncon trials to find real proportion of truly correct trials. Divide by total number of trials and multiply by 100.
        medianRtLoop2Test = np.median(trialsTestLoop2.data['response2.rt'])
        msg2 = "%i %s" %(nCorrLoop2Test, percentCorrect) #percentCorrect is a variable pulled from excel sheet 'blocks'
        msg2_2 = "%.2f %s" %(medianRtLoop2Test, seconds) #same as above
    TextComponent text_22
      text [set every repeat] = $msg2
      pos = [0.2, 0]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'd', 'k'
      startVal [time (s)] = .4
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    TextComponent text_23
      text [set every repeat] = $space
      pos = [0, -0.8]
      startVal [time (s)] = .4
      letterHeight = 0.05
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    TextComponent text_24
      text [set every repeat] = $msg2_2
      pos = [0.2, -0.1]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent accuracyMessageTestIncon_2
      text [set every repeat] = $accuracy
      pos = [-0.2, -0.0]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent speedMessageInconTest_2
      text [set every repeat] = $speed
      pos = [-0.2, -0.1]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent aimAccuracyAndLatencyInconTest_2
      text [set every repeat] = $aim
      pos = [0, 0.3]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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  Routine intro
    TextComponent introBox
      text [set every repeat] = $intro
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    KeyboardComponent keyResponseIntro
      forceEndRoutine = True
      allowedKeys = 'd', 'k'
      startVal [time (s)] = .4
      store = first key
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    TextComponent pressSpaceIntro
      text [set every repeat] = $space
      pos = [0, -0.8]
      startVal [time (s)] = .4
      letterHeight = 0.05
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  Routine thanks
    TextComponent text
      text [set every repeat] = $contactresearcher
      pos = [0, -0.2]
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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    TextComponent endMsgLabel
      text [set every repeat] = $endMsg
      pos = [0, 0.1]
      startVal [time (s)] = 0.4
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = .4
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  Routine feedbackBlock1Test
    CodeComponent code_5
      Begin Experiment:
        msg1='doh!'#if this comes up we forgot to update the msg!
        endMsg='Finished Experiment'
      Begin Routine:
        nCorrLoop1Test = (float(trialsTestLoop1.data['response1.corr'].count()) - float(trialsTestLoop1.data['incorrectResponse1.corr'].sum())) /  float(trialsTestLoop1.data['response1.corr'].count()) * 100 #count the number of 'correct' correctIncon trials (which actually equals the number of trials, as all must be correct to progress). Take away the number of 'correct' incorrectIncon trials to find real proportion of truly correct trials. Divide by total number of trials and multiply by 100.
        medianRtLoop1Test = np.median(trialsTestLoop1.data['response1.rt'])
        msg1 = "%i %s" %(nCorrLoop1Test, percentCorrect) #percentCorrect is a variable pulled from excel sheet 'blocks'
        msg1_2 = "%.2f %s" %(medianRtLoop1Test, seconds) #same as above
    TextComponent text_25
      text [set every repeat] = $msg1
      pos = [0.2, 0]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = 'd', 'k'
      startVal [time (s)] = .4
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    TextComponent text_26
      text [set every repeat] = $space
      pos = [0, -0.8]
      startVal [time (s)] = .4
      letterHeight = 0.05
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    TextComponent text_27
      text [set every repeat] = $msg1_2
      pos = [0.2, -0.1]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent accuracyMessage_2
      text [set every repeat] = $accuracy
      pos = [-0.2, 0]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent speedMessage_2
      text [set every repeat] = $speed
      pos = [-0.2, -0.1]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent aimAccuracyAndLatency_2
      text [set every repeat] = $aim
      pos = [0, 0.3]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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  Routine instructTest2
    TextComponent instrTextIncon_3
      color = $[-1,1,-1]
      text [set every repeat] = $rule2
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'd', 'k'
      startVal [time (s)] = .4
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    TextComponent text_13
      text [set every repeat] = $space
      pos = [0, -0.8]
      startVal [time (s)] = .4
      letterHeight = 0.05
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  Routine feedbackBlock2Prac
    CodeComponent code
      Begin Experiment:
        msg2='doh!'#if this comes up we forgot to update the msg!
        completeTestBlocks=0
      Begin Routine:
        nCorrLoop2Prac = (float(trialsLoop2.data['response2.corr'].count()) - float(trialsLoop2.data['incorrectResponse2.corr'].sum())) /  float(trialsLoop2.data['response2.corr'].count()) * 100 #count the number of 'correct' correctIncon trials (which actually equals the number of trials, as all must be correct to progress). Take away the number of 'correct' incorrectIncon trials to find real proportion of truly correct trials. Divide by total number of trials and multiply by 100.
        medianRtLoop2Prac = np.median(trialsLoop2.data['response2.rt'])
        msg2 = "%i %s" %(nCorrLoop2Prac, percentCorrect) #percentCorrect is a variable pulled from excel sheet 'blocks'
        msg2_2 = "%.2f %s" %(medianRtLoop2Prac, seconds) #same as above
      End Routine:
        if nCorrLoop1Prac >= accuracyCriterion and nCorrLoop2Prac >= accuracyCriterion and medianRtLoop1Prac <= latencyCriterion and medianRtLoop2Prac <= latencyCriterion: #latencyCriterion and accuracyCriterion are variables pulled from the 'blocks' excel sheets
        #    endMsg='Finished Practice'
            pracBlocks.finished=True
            completeTestBlocks=1
    TextComponent text_10
      text [set every repeat] = $msg2
      pos = [0.2, 0]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    KeyboardComponent key_resp_11
      forceEndRoutine = True
      allowedKeys = 'd', 'k'
      startVal [time (s)] = .4
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    TextComponent text_33
      text [set every repeat] = $space
      pos = [0, -0.8]
      startVal [time (s)] = .4
      letterHeight = 0.05
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    TextComponent text_34
      text [set every repeat] = $msg2_2
      pos = [0.2, -0.1]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent accuracyMessageIncon_2
      text [set every repeat] = $accuracy
      pos = [-0.2, 0]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent speedMessageIncon_2
      text [set every repeat] = $speed
      pos = [-0.2, -0.1]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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    TextComponent aimAccuracyAndLatencyIncon_2
      text [set every repeat] = $aim
      pos = [0, 0.3]
      startVal [time (s)] = 0.4
      letterHeight = 0.08
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Flow
  LoopInitiator getIntroStrings loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = random
    nReps = 1
    conditions = [{u'endMsg': u'This task is now finished', u'intro': u"This task will present you with statements and ask you to respond with true or false.\n\nWhereas a questionnaire asks to respond with your personal and subjective opinion this task instead asks you to follow a rule. It will assess which rules make 'intuitive sense' to you and which do not.\n\nStart by going as slowly as you need to get as many correct as possible according to the rule. You will naturally get faster with practice.", u'space': u'Press spacebar to continue', u'contactresearcher': u'Please contact the researcher'}]
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    Routine intro
  LoopTerminator getIntroStrings
  LoopInitiator pracBlocks loopType="TrialHandler"
    conditionsFile = Blocks.xlsx
    isTrials = False
    loopType = sequential
    nReps = 3
    conditions = [{u'aim': u'Aim for >80% and <2 seconds', u'accuracyCriterion': 80, u'latencyCriterion': 2, u'numberBlocks': 1, u'percentCorrect': u'percent correct', u'seconds': u'seconds', u'rule2': u'Now respond AS IF fruit is negative and insects are positive', u'rule1': u'Now respond AS IF fruit is positive and insects are negative', u'speed': u'Speed:', u'accuracy': u'Accuracy:'}]
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    Routine instructPrac
    LoopInitiator trialsLoop1 loopType="TrialHandler"
      conditionsFile = stimuli.xlsx
      loopType = random
      nReps = 1
      endPoints = [1, 2]
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      conditions:
        [{u'responseOption1': u'True', u'target': u'Loyal  ', u'responseOption2': u'False', u'label': u'I am', u'correctAns1': u'd', u'trialType': 1, u'correctAns2': u'k', u'allowAns2': u'k', u'allowAns1': u'd'},
        {u'responseOption1': u'True', u'target': u'Trustworthy', u'responseOption2': u'False', u'label': u'I am', u'correctAns1': u'd', u'trialType': 1, u'correctAns2': u'k', u'allowAns2': u'k', u'allowAns1': u'd'},
        {u'responseOption1': u'True', u'target': u'Kind', u'responseOption2': u'False', u'label': u'I am', u'correctAns1': u'd', u'trialType': 1, u'correctAns2': u'k', u'allowAns2': u'k', u'allowAns1': u'd'},
        {u'responseOption1': u'True', u'target': u'Moral', u'responseOption2': u'False', u'label': u'I am', u'correctAns1': u'd', u'trialType': 1, u'correctAns2': u'k', u'allowAns2': u'k', u'allowAns1': u'd'},
        {u'responseOption1': u'True', u'target': u'Generous', u'responseOption2': u'False', u'label': u'I am', u'correctAns1': u'd', u'trialType': 1, u'correctAns2': u'k', u'allowAns2': u'k', u'allowAns1': u'd'},
        {u'responseOption1': u'True', u'target': u'Friendly', u'responseOption2': u'False', u'label': u'I am', u'correctAns1': u'd', u'trialType': 1, u'correctAns2': u'k', u'allowAns2': u'k', u'allowAns1': u'd'},
        {u'responseOption1': u'True', u'target': u'Manipulative', u'responseOption2': u'False', u'label': u'I am', u'correctAns1': u'k', u'trialType': 2, u'correctAns2': u'd', u'allowAns2': u'd', u'allowAns1': u'k'}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
      Routine block1Trials
    LoopTerminator trialsLoop1
    Routine feedbackBlock1Prac
    Routine instructPrac2
    LoopInitiator trialsLoop2 loopType="TrialHandler"
      conditionsFile = stimuli.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{u'responseOption1': u'True', u'target': u'Loyal  ', u'responseOption2': u'False', u'label': u'I am', u'correctAns1': u'd', u'trialType': 1, u'correctAns2': u'k', u'allowAns2': u'k', u'allowAns1': u'd'},
        {u'responseOption1': u'True', u'target': u'Trustworthy', u'responseOption2': u'False', u'label': u'I am', u'correctAns1': u'd', u'trialType': 1, u'correctAns2': u'k', u'allowAns2': u'k', u'allowAns1': u'd'},
        {u'responseOption1': u'True', u'target': u'Kind', u'responseOption2': u'False', u'label': u'I am', u'correctAns1': u'd', u'trialType': 1, u'correctAns2': u'k', u'allowAns2': u'k', u'allowAns1': u'd'},
        {u'responseOption1': u'True', u'target': u'Moral', u'responseOption2': u'False', u'label': u'I am', u'correctAns1': u'd', u'trialType': 1, u'correctAns2': u'k', u'allowAns2': u'k', u'allowAns1': u'd'},
        {u'responseOption1': u'True', u'target': u'Generous', u'responseOption2': u'False', u'label': u'I am', u'correctAns1': u'd', u'trialType': 1, u'correctAns2': u'k', u'allowAns2': u'k', u'allowAns1': u'd'},
        {u'responseOption1': u'True', u'target': u'Friendly', u'responseOption2': u'False', u'label': u'I am', u'correctAns1': u'd', u'trialType': 1, u'correctAns2': u'k', u'allowAns2': u'k', u'allowAns1': u'd'},
        {u'responseOption1': u'True', u'target': u'Manipulative', u'responseOption2': u'False', u'label': u'I am', u'correctAns1': u'k', u'trialType': 2, u'correctAns2': u'd', u'allowAns2': u'd', u'allowAns1': u'k'}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
      Routine block2Trials
    LoopTerminator trialsLoop2
    Routine feedbackBlock2Prac
  LoopTerminator pracBlocks
  LoopInitiator completeTestBlocksConditional loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = completeTestBlocks
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    LoopInitiator testBlocks loopType="TrialHandler"
      conditionsFile = Blocks.xlsx
      isTrials = False
      loopType = sequential
      nReps = 3
      conditions = [{u'aim': u'Aim for >80% and <2 seconds', u'accuracyCriterion': 80, u'latencyCriterion': 2, u'numberBlocks': 1, u'percentCorrect': u'percent correct', u'seconds': u'seconds', u'rule2': u'Now respond AS IF fruit is negative and insects are positive', u'rule1': u'Now respond AS IF fruit is positive and insects are negative', u'speed': u'Speed:', u'accuracy': u'Accuracy:'}]
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      Routine instructTest
      LoopInitiator trialsTestLoop1 loopType="TrialHandler"
        conditionsFile = stimuli.xlsx
        loopType = random
        nReps = 1
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        conditions:
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        Routine block1Trials
      LoopTerminator trialsTestLoop1
      Routine feedbackBlock1Test
      Routine instructTest2
      LoopInitiator trialsTestLoop2 loopType="TrialHandler"
        conditionsFile = stimuli.xlsx
        loopType = random
        nReps = 1
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        conditions:
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        Routine block2Trials
      LoopTerminator trialsTestLoop2
      Routine feedbackBlock2Test
    LoopTerminator testBlocks
  LoopTerminator completeTestBlocksConditional
  LoopInitiator getThanksStrings loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
    conditions = [{u'endMsg': u'This task is now finished', u'intro': u"This task will present you with statements and ask you to respond with true or false.\n\nWhereas a questionnaire asks to respond with your personal and subjective opinion this task instead asks you to follow a rule. It will assess which rules make 'intuitive sense' to you and which do not.\n\nStart by going as slowly as you need to get as many correct as possible according to the rule. You will naturally get faster with practice.", u'space': u'Press spacebar to continue', u'contactresearcher': u'Please contact the researcher'}]
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    Routine thanks
  LoopTerminator getThanksStrings
